---
API: 3
OpenSesame: 4.0.13
Platform: posix
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path None
set disable_garbage_collection True
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3d3846"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run trials True

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Press 'M' if the tone is in tune with the guitar sounds and 'Z' if it is not." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="" x=-96 y=32 z_index=0

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "M,Z"

define inline_script play_guitar_sounds
	set description "Executes Python code"
	___run__
	import pygame
	import time
	
	# Initialize pygame mixer for sound playback
	pygame.mixer.init()
	
	# Define function to play guitar sounds
	def play_guitar_sound(volume):
	    strong_sound = pygame.mixer.Sound('kick-classic.wav')
	    weak_sound = pygame.mixer.Sound('snare-808.wav')
	    strong_sound.set_volume(volume)
	    weak_sound.set_volume(volume * 0.5)
	    for _ in range(5):
	        strong_sound.play()
	        time.sleep(1.0)
	        weak_sound.play()
	        time.sleep(1.0)
	
	play_guitar_sound(1.0)  # Adjust volume as needed
	__end__
	set _prepare ""

define inline_script play_random_tone
	set description "Executes Python code"
	___run__
	import random
	
	# Function to play a tone
	def play_tone(frequency, duration):
	    sample_rate = 44100
	    n_samples = int(sample_rate * duration)
	    buf = pygame.sndarray.make_sound(
	        pygame.surfarray.array2d(
	            [[(32767 * (1.0 + math.sin(2.0 * math.pi * frequency * x / sample_rate))) for x in range(n_samples)]
	             for y in range(1)]
	        )
	    )
	    buf.play()
	
	if random.random() < 0.5:  # 50% chance to play the tone
	    play_tone(440, 0.5)
	    time.sleep(1.0)
	__end__
	set _prepare ""

define inline_script record_response
	set description "Executes Python code"
	___run__
	response_time = self.get('response_time')
	response = self.get('response')
	print("Response:", response)
	print("Reaction Time:", response_time)
	__end__
	set _prepare ""

define loop trials
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if 10
	setcycle 0 empty_column ""
	run trials_sequence

define sequence trials_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions True
	run play_guitar_sounds True
	run play_random_tone True
	run new_keyboard_response True
	run record_response True

