---
API: 3
OpenSesame: 4.0.13
Platform: posix
---
set width 640
set title "Gaze Cuing"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 480
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 19
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/Users/vidhyakshayakannan/Downloads"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define loop block_loop
	set source table
	set repeat 0.5
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 gaze_cue left
	setcycle 0 target_letter F
	setcycle 0 target_pos -300
	setcycle 0 dist_pos 300
	setcycle 0 correct_response z
	setcycle 1 gaze_cue right
	setcycle 1 target_letter F
	setcycle 1 target_pos -300
	setcycle 1 dist_pos 300
	setcycle 1 correct_response z
	setcycle 2 gaze_cue left
	setcycle 2 target_letter H
	setcycle 2 target_pos -300
	setcycle 2 dist_pos 300
	setcycle 2 correct_response m
	setcycle 3 gaze_cue right
	setcycle 3 target_letter H
	setcycle 3 target_pos -300
	setcycle 3 dist_pos 300
	setcycle 3 correct_response m
	setcycle 4 gaze_cue left
	setcycle 4 target_letter F
	setcycle 4 target_pos 300
	setcycle 4 dist_pos -300
	setcycle 4 correct_response z
	setcycle 5 gaze_cue right
	setcycle 5 target_letter F
	setcycle 5 target_pos 300
	setcycle 5 dist_pos -300
	setcycle 5 correct_response z
	setcycle 6 gaze_cue left
	setcycle 6 target_letter H
	setcycle 6 target_pos 300
	setcycle 6 dist_pos -300
	setcycle 6 correct_response m
	setcycle 7 gaze_cue right
	setcycle 7 target_letter H
	setcycle 7 target_pos 300
	setcycle 7 dist_pos -300
	setcycle 7 correct_response m
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback True
	run block_loop True
	run feedback True

define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of experiment"
	__form_text__
	The experiment is finished. 
	Click on OK to exit.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of practice"
	__form_text__
	The practice phase is over. 
	
	Click on OK to start the actual experiment. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions True
	run practice_loop True
	run end_of_practice True
	run experimental_loop True
	run end_of_experiment True

define loop experimental_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=19 html=yes show_if=True text="End of block!<br /><br />Your average responge time was [avg_rt] ms. <br /><br />Your accuracy was [acc] %.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0

define sketchpad gaze_cue
	set duration 495
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=True x=0 y=0 z_index=0

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I understand!"
	set margins "50;50;50;50"
	set form_title Intstructions
	__form_text__
	You will see an F or an H. If you see:
	
	- An F, press the "Z" key
	- An H, press the "M" key
	
	Be as fast and accurate as possible!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad neutral_gaze
	set duration 495
	set description "Displays stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=True x=0 y=0 z_index=0

define loop practice_loop
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice yes
	run block_sequence

define reset_feedback reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=True x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=19 html=yes show_if=True text="[target_letter]" x="[target_pos]" y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=19 html=yes show_if=True text=X x="[dist_pos]" y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot True
	run neutral_gaze True
	run gaze_cue True
	run target True
	run keyboard_response True
	run incorrect_sound "[correct]=0"
	run logger True

